PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ax-cpt
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Routines
  Routine TCI
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $PreCueTime
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      text:
        +
  Routine CUE
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $Cue
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    KeyboardComponent key_resp
      allowedKeys = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = .5
      stopVal [duration (s)] = $ISI
      text = + + +
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  Routine CTI
  Routine TARGET
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Probe
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        subTrial.finished = True
        timingLoop.finished = True
        count += 1


        subTrial.addData('ISI', ISI)
        subTrial.addData('PreCueTime', PreCueTime)
        subTrial.addData('Probe', Probe)
        subTrial.addData('Cue', Cue)


        if count == 5:
            trialLoop.finished = True
  Routine start
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        count = 0
Flow
  Routine start
  LoopInitiator trialLoop loopType="TrialHandler"
    conditionsFile = conditions/GlobalConditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
      OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
      OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
      OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
      OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
      OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
      OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
      OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
      OrderedDict([('ConditionFile', 'conditions/AYListBas1Pro2Rea1.xlsx'), ('TrialType', 'AY'), ('CorrRespTarget', 1.0), ('CorRespCue', 1)]),
      OrderedDict([('ConditionFile', 'conditions/AYListBas1Pro2Rea1.xlsx'), ('TrialType', 'AY'), ('CorrRespTarget', 1.0), ('CorRespCue', 1)]),
      OrderedDict([('ConditionFile', 'conditions/AYListBas1Pro2Rea1.xlsx'), ('TrialType', 'BX'), ('CorrRespTarget', 1.0), ('CorRespCue', 1)])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
    LoopInitiator timingLoop loopType="TrialHandler"
      conditionsFile = conditions\trialTiming.xlsx
      isTrials = False
      loopType = fullRandom
      nReps = 1
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      conditions:
        [OrderedDict([('PreCueTime', 1.0), ('ISI', 2)]),
        OrderedDict([('PreCueTime', 1.0), ('ISI', 6)]),
        OrderedDict([('PreCueTime', 0.5), ('ISI', 2)]),
        OrderedDict([('PreCueTime', 0.5), ('ISI', 6)])]
      Routine TCI
      LoopInitiator subTrial loopType="TrialHandler"
        conditionsFile = $ConditionFile
        isTrials = False
        loopType = fullRandom
        nReps = 1
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        Routine CUE
        Routine TARGET
      LoopTerminator subTrial
    LoopTerminator timingLoop
  LoopTerminator trialLoop
